[General settings]
name: SQE_VIRTUAL_Comb_Response
version: 1.0
driver_path: SQE_VIRTUAL_Comb_Response
signal_generator: True

[Start frequency]
datatype: DOUBLE
permission: READ
group: X-axis
def_value: 1e9
unit: Hz

[Stop frequency]
datatype: DOUBLE
permission: READ
group: X-axis
def_value: 20e9
unit: Hz

[Number of points]
datatype: DOUBLE
def_value: 2001
group: X-axis

[Center frequency]
datatype: DOUBLE
def_value: 6e9
unit: Hz
group: Comb

[Line spacing]
datatype: DOUBLE
def_value: 100e6
unit: Hz
group: Comb

[Number of lines]
datatype: DOUBLE
def_value: 21
group: Comb
tooltip: Total number of comb lines (prefer odd for symmetric around center)

[Linewidth]
datatype: DOUBLE
def_value: 5e6
unit: Hz
group: Comb
tooltip: Approximate FWHM of each line

[Amplitude envelope]
datatype: COMBO
combo_def_1: Flat
combo_def_2: Gaussian
combo_def_3: Custom
def_value: Flat
group: Comb

[Custom amplitudes]
datatype: STRING
def_value: 1,0.8,0.6,0.4,0.2
group: Comb
state_quant: Amplitude envelope
state_value_1: Custom
tooltip: Comma-separated amplitudes for each line (will be normalized)

[Global phase]
datatype: DOUBLE
def_value: 0
unit: rad
group: Comb

[Add noise]
datatype: BOOLEAN
def_value: False
group: Additional options

[Magnitude noise]
datatype: DOUBLE
def_value: 0.05
state_quant: Add noise
state_value_1: True
group: Additional options

[Phase noise]
datatype: DOUBLE
def_value: 0
unit: rad/pi
state_quant: Add noise
state_value_1: True
group: Additional options

[Gain]
datatype: DOUBLE
def_value: 1
group: Additional options

[Offset]
datatype: DOUBLE
def_value: 0
group: Additional options

[Spectrum]
datatype: VECTOR_COMPLEX
permission: READ
x_name: Frequency
x_unit: Hz
show_in_measurement_dlg: True
